<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>INPUT FILES</file>
            <file>INPUT FILES</file>
        </parameter>
    </batchstep>

    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">100000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>

    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">300000.0</parameter>
        <parameter name="Min highest intensity">100000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>

    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Local minimum search">
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            <module name="Local minimum search">
                <parameter name="Chromatographic threshold">1.0E-4</parameter>
                <parameter name="Search minimum in RT range (min)">0.5</parameter>
                <parameter name="Minimum relative height">1.0E-4</parameter>
                <parameter name="Minimum absolute height">300000.0</parameter>
                <parameter name="Min ratio of peak top/edge">2.0</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.05</min>
                    <max>0.5</max>
                </parameter>
            </module>
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        </parameter>
        <parameter measure="AUTO" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">0.01</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">0.1</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>

    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.3</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">4</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>

    <batchstep method="io.github.mzmine.modules.io.gnpsexport.fbmn.GnpsFbmnExportAndSubmitModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>GNPSEXPORTPREFIX</current_file>
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        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">ALL</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
</batch>